PsychoPy2experiment version="3.0.0b9"
Settings
  Experiment info = {u'session': u'001', u'participant': u''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = use prefs
  Window size (pixels) = [1440, 900]
  expName = TBPMnBack
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Routines
  Routine Feedback
    CodeComponent code_3
      Code Type = Py
      Begin Experiment:
        msg='';
      Begin Routine:
        # set whatever keypress values are appropriate for this trial: if practiceLoop.thisN == 0:      one_back = 'Not applicable' # initial value
        if stimFile == one_back and respPractice == 'y':     msg="Correct! RT=" + resp.rt
        elif stimFile != one_back and respPractice == 'y':
            msg="Correct! RT=" + resp.rt
        else:
            msg="Correct! RT="
      End Routine:
        one_back = stimFile
    TextComponent textFeedback
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = $msg
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  Routine InstructionsPractice
    TextComponent textPractice
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Practice
        Você deve pressionar a tecla de espaço se a imagem na tela for a mesma da imagem imediatamente anterior.
        You must press the space key if the image on the screen is the same as the immediately previous image.
        You must press the M key to reset the clock each time one minute passes.
        To find out how much time has passed since you started to see the images you can press the z key.
    KeyboardComponent respPract
      allowedKeys = 't'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine InstructionsExperiment
    TextComponent textExperiment
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Experiment
        Você deve pressionar a tecla de espaço se a imagem na tela for a mesma da imagem imediatamente anterior.
        You must press the space key if the image on the screen is the same as the immediately previous image.
        You must press the M key to reset the clock each time one minute passes.
        To find out how much time has passed since you started to see the images you can press the z key.
    KeyboardComponent respExpText
      allowedKeys = 't'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Thanks
    TextComponent textThanks
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = Obrigado
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  Routine experimentTrial
    ImageComponent imageExperiment
      image = $stimFile
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.7
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    NoiseStimComponent noiseExperiment
      interpolate = nearest
      noiseBW = 1
      noiseBWO = 1
      noiseBaseSf = 8.0
      noiseClip = 3.0
      noiseElementSize = 0.0625
      noiseFilterLower = 1.0
      noiseFilterOrder = 0.0
      noiseFilterUpper = 8.0
      noiseFractalPower = 0.0
      noiseImage = None
      noiseNewSample = None
      noiseNewSampleWhen = 1
      noiseType = Binary
      sf = None
      size = (0.5, 0.5)
      startVal [time (s)] = 0.7
      stopVal [duration (s)] = 1
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  Routine ExperimentTrial
    ImageComponent imageExp
      image = $stimFile
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .7
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    NoiseStimComponent noise_3
      interpolate = nearest
      noiseBW = 1
      noiseBWO = 1
      noiseBaseSf = 8.0
      noiseClip = 3.0
      noiseElementSize = 0.0625
      noiseFilterLower = 1.0
      noiseFilterOrder = 0.0
      noiseFilterUpper = 8.0
      noiseFractalPower = 0.0
      noiseImage = None
      noiseNewSample = None
      noiseNewSampleWhen = 1
      noiseType = Binary
      sf = None
      size = (0.5, 0.5)
      startVal [time (s)] = 0.7
      stopVal [duration (s)] = 1.0
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  Routine Holaexperimento
    TextComponent text_3
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = listo
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    KeyboardComponent key_resp_5
      allowedKeys = 't'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine practice
    KeyboardComponent respPractice
      allowedKeys = 'y','n'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent image
      image [set every repeat] = $stimFile
      size = (0.5,0.5)
      startVal [time (s)] = 0
      stopVal [duration (s)] = .7
      units = height
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    NoiseStimComponent noise_2
      interpolate = nearest
      noiseBW = 1
      noiseBWO = 1
      noiseBaseSf = 8.0
      noiseClip = 3.0
      noiseElementSize = 0.0625
      noiseFilterLower = 1.0
      noiseFilterOrder = 0.0
      noiseFilterUpper = 8.0
      noiseFractalPower = 0.0
      noiseImage = None
      noiseNewSample = None
      noiseNewSampleWhen = 1
      noiseType = Binary
      sf = None
      size = (0.5, 0.5)
      startVal [time (s)] = 0.7
      stopVal [duration (s)] = 0.7
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  Routine readyMessage
    TextComponent textTask
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Bloque nuevo
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    KeyboardComponent respTask
      allowedKeys = 't'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine valencedTrial
    CodeComponent code_2
      Code Type = Py
      Begin Routine:
        x = randint(low = 1, high = 5)
    ImageComponent image_2
      image [set every repeat] = $stimFile
      size = (1.5, 1.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.7
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    NoiseStimComponent noise
      interpolate = nearest
      noiseBW = 1
      noiseBWO = 1
      noiseBaseSf = 8.0
      noiseClip = 3.0
      noiseElementSize = 0.0625
      noiseFilterLower = 1.0
      noiseFilterOrder = 0.0
      noiseFilterUpper = 8.0
      noiseFractalPower = 0.0
      noiseImage = None
      noiseNewSample = None
      noiseNewSampleWhen = 1
      noiseType = Binary
      sf = None
      size = (1.5, 1.5)
      startVal [time (s)] = 0.7
      stopVal [duration (s)] = x
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  Routine WelcomeScreen
    CodeComponent StimuliRandomization
      Code Type = Py
      Begin Experiment:
        import pandas as pd
        files = ['pos.xlsx', 'neg.xlsx', 'neutral.xlsx']
         # 9 images per condition
        # 3 repeats per condition
        # First, select repeating stim at random and indicate they repeat with a 1
        newStimList = pd.DataFrame()
        for f in files:
             temp = pd.read_excel(f)
             randomLocs = np.random.choice(range(temp.shape[0]), size=3, replace=False)
             temp['repeat'].iloc[randomLocs] = 1
             newStimList = newStimList.append(temp)  # Append all stim to a new dataframe, so all in one place
        # Shuffle new dataframe
        newStimList = newStimList.sample(frac=1).reset_index(drop=True)
        # Add new index to keep track of order
        newStimList = newStimList.reset_index()
        # Duplicate repeating rows
        repeats = newStimList[newStimList['repeat']==1]
        newStimList = pd.concat([repeats, newStimList], ignore_index=True).sort_values('index')
        # Save new stim list to csv ready for trial handler
        newStimList.to_csv('newStimList.csv', index=False)
    TextComponent textWS
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        Bem vindo.
        Leia as instrucoes no papel.
    KeyboardComponent respWS
      allowedKeys = 't'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine PracticeRoutine
    ImageComponent imageprobando
      image [set every repeat] = $stim
      size = (1.5, 1.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    KeyboardComponent respPrac
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.2
      storeCorrect = True
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  Routine feedback
    CodeComponent code
      Code Type = Py
      Begin Experiment:
        # Begin Experiment
        msg = ''
      Begin Routine:
        # Begin Routine
        if trialsPractice.thisN == 0:
             one_back = 'Not applicable'
      End Routine:
        # End Routine
        if stim == one_back and respPrac.keys == 'space':
             msg= "Correct! RT=%.3f" %(respPrac.rt)
        elif stim != one_back and not respPrac.keys:
              msg= "Correct!"
        elif stim != one_back and respPrac.keys == 'space':
             msg="Incorrect"
        elif stim == one_back and not respPrac.keys:
             msg="You miss that one"
        one_back = stim
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $msg
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Flow
  Routine WelcomeScreen
  Routine InstructionsPractice
  LoopInitiator trialsPractice loopType="TrialHandler"
    conditionsFile = newStimList.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('index', 0), ('stim', 'stims/4001.jpg'), ('repeat', None)]),
      OrderedDict([('index', 1), ('stim', 'stims/7820.jpg'), ('repeat', None)]),
      OrderedDict([('index', 2), ('stim', 'stims/7230.jpg'), ('repeat', None)]),
      OrderedDict([('index', 3), ('stim', 'stims/7496.jpg'), ('repeat', None)]),
      OrderedDict([('index', 4), ('stim', 'stims/7460.jpg'), ('repeat', None)]),
      OrderedDict([('index', 5), ('stim', 'stims/7330.jpg'), ('repeat', 1.0)]),
      OrderedDict([('index', 5), ('stim', 'stims/7330.jpg'), ('repeat', 1.0)]),
      OrderedDict([('index', 6), ('stim', 'stims/4653.jpg'), ('repeat', None)]),
      OrderedDict([('index', 7), ('stim', 'stims/7180.jpg'), ('repeat', None)]),
      OrderedDict([('index', 8), ('stim', 'stims/2312.jpg'), ('repeat', None)]),
      OrderedDict([('index', 9), ('stim', 'stims/4003.jpg'), ('repeat', None)]),
      OrderedDict([('index', 10), ('stim', 'stims/4000.jpg'), ('repeat', 1.0)]),
      OrderedDict([('index', 10), ('stim', 'stims/4000.jpg'), ('repeat', 1.0)]),
      OrderedDict([('index', 11), ('stim', 'stims/5622.jpg'), ('repeat', None)]),
      OrderedDict([('index', 12), ('stim', 'stims/9045.jpg'), ('repeat', None)]),
      OrderedDict([('index', 13), ('stim', 'stims/9045.jpg'), ('repeat', None)]),
      OrderedDict([('index', 14), ('stim', 'stims/7237.jpg'), ('repeat', None)]),
      OrderedDict([('index', 15), ('stim', 'stims/8116.jpg'), ('repeat', None)]),
      OrderedDict([('index', 16), ('stim', 'stims/5628.jpg'), ('repeat', None)]),
      OrderedDict([('index', 17), ('stim', 'stims/2850.jpg'), ('repeat', None)])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
    Routine PracticeRoutine
    Routine feedback
  LoopTerminator trialsPractice
  Routine InstructionsExperiment
  LoopInitiator conditionsLoop loopType="TrialHandler"
    Selected rows = 0:2
    conditionsFile = chooseBlock.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('condsFile', 'negativeBlock.csv'), ('readyMsg', 'Pronto')]),
      OrderedDict([('condsFile', 'NeutralBlock.csv'), ('readyMsg', 'Pronto')]),
      OrderedDict([('condsFile', 'positiveBlock.csv'), ('readyMsg', 'Pronto')]),
      OrderedDict([('condsFile', 'practiceBlock.csv'), ('readyMsg', 'Pronto')])]
    Routine readyMessage
    LoopInitiator experimentalLoop loopType="TrialHandler"
      conditionsFile = $condsFile
      loopType = random
      nReps = 1
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      Routine valencedTrial
    LoopTerminator experimentalLoop
  LoopTerminator conditionsLoop
  Routine Thanks
