PsychoPy2experiment version="3.0.0b9"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = use prefs
  Window size (pixels) = (1024, 768)
  expName = untitled
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Routines
  Routine trial
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Hola
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    KeyboardComponent key_resp_2
      allowedKeys = 't',
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine practica
    ImageComponent image
      image [set every repeat] = $stimFile
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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Flow
  Routine trial
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = practiceBlock.csv
    loopType = random
    nReps = 5
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    conditions:
      [OrderedDict([('stimFile', 'stims/001.i.jpg'), ('Valence', 'Practice')]),
      OrderedDict([('stimFile', 'stims/002.i.jpg'), ('Valence', 'Practice')]),
      OrderedDict([('stimFile', 'stims/003.i.jpg'), ('Valence', 'Practice')]),
      OrderedDict([('stimFile', 'stims/004.i.jpg'), ('Valence', 'Practice')]),
      OrderedDict([('stimFile', 'stims/005.i.jpg'), ('Valence', 'Practice')]),
      OrderedDict([('stimFile', 'stims/006.i.jpg'), ('Valence', 'Practice')]),
      OrderedDict([('stimFile', 'stims/007.i.jpg'), ('Valence', 'Practice')]),
      OrderedDict([('stimFile', 'stims/008.i.jpg'), ('Valence', 'Practice')]),
      OrderedDict([('stimFile', 'stims/009.i.jpg'), ('Valence', 'Practice')]),
      OrderedDict([('stimFile', 'stims/010.i.jpg'), ('Valence', 'Practice')]),
      OrderedDict([('stimFile', 'stims/011.i.jpg'), ('Valence', 'Practice')]),
      OrderedDict([('stimFile', 'stims/012.i.jpg'), ('Valence', 'Practice')]),
      OrderedDict([('stimFile', 'stims/013.i.jpg'), ('Valence', 'Practice')]),
      OrderedDict([('stimFile', 'stims/014.i.jpg'), ('Valence', 'Practice')]),
      OrderedDict([('stimFile', 'stims/015.i.jpg'), ('Valence', 'Practice')]),
      OrderedDict([('stimFile', 'stims/016.i.jpg'), ('Valence', 'Practice')]),
      OrderedDict([('stimFile', 'stims/017.i.jpg'), ('Valence', 'Practice')]),
      OrderedDict([('stimFile', 'stims/018.i.jpg'), ('Valence', 'Practice')]),
      OrderedDict([('stimFile', 'stims/019.i.jpg'), ('Valence', 'Practice')]),
      OrderedDict([('stimFile', 'stims/020.i.jpg'), ('Valence', 'Practice')]),
      OrderedDict([('stimFile', 'stims/021.i.jpg'), ('Valence', 'Practice')])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
    Routine practica
  LoopTerminator trials
